PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': 'XXX'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = white
  expName = Checkerboard
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Routines
  Routine trial
    ImageComponent Checkerboard
      image = stimuli\checkerboard.bmp
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    ImageComponent Checkerboard2
      image = stimuli\checkerboard2.bmp
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.6
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  Routine Rest
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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  Routine Load_LSL
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='TriggerStream', type='Markers', channel_count=1, channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
  Routine Wait_Begin
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please check the LSL connection in NIRStar or Aurora

        Press 'space' to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fNIRS_trigger
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[1])
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EEG_trigger
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[2])
Flow
  Routine Load_LSL
  Routine Wait_Begin
  LoopInitiator Experiment loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Rest
    Routine fNIRS_trigger
    LoopInitiator block loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine trial
    LoopTerminator block
  LoopTerminator Experiment
